<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>Arduino</io:Name>
          <io:PortName>COM5</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>WashPump.csv</io:FileName>
        <io:ListSeparator />
        <io:ScanPattern>%s</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>Arduino</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>Arduino</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>032323\wash.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome>C:\Users\Valerie\.conda\envs\bonsai-env</py:PythonHome>
          <py:ScriptPath>C:\Users\Valerie\Downloads\draw_roi.py</py:ScriptPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>detection(0, 'motion', 2000, r"C:\Users\Valerie\Downloads\HugoFSM\test.csv")</py:Script>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
